PsychoPy2experiment version="2023.2.3"
Settings
  Data filename = u'data' + os.sep + '%s_%s' % (expInfo['participant'], expInfo['date'])
  Experiment info = {'participant': '999', 'age': '38', 'tracking': '0', 'scanning': '0', 'practice': '0'}
  Full-screen window = True
  Monitor = testMonitor
  Save excel file = True
  Screen = 1
  Units = pix
  Window size (pixels) = [1920, 1080]
  color = [0.3082,0.3536,0.2946]
  expName = oddball_with_tracking
  keyboardBackend = PsychToolbox
  logging level = debug
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Routines
  Routine trial
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    CodeComponent elTrial
      Code Type = Py
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      Begin Routine:
        if int(expInfo['tracking'])==1:
        # This Begin Routine tab of the elTrial component resets some
        # variables that are used to keep track of whether certain trial events have
        # happened and sends trial variable messages to the EDF to mark condition
        # information

        # these variables keep track of whether the fixation presentation, image
        # presentation, and trial response have occured yet (0 = no, 1 = yes).
        # They later help us to ensure that each event marking message only gets
        # sent once, at the time of each event
            sentResponseMessage = 0
            sentFixationMessage = 0
            sentBallMessage = 0

        # create a keyboard instance and reinitialize a kePressNameList, which
        # will store list of key names currently being pressed (to allow Ctrl-C abort)
            kb = keyboard.Keyboard()
            keyPressNameList = list()

        # send a "TRIALID" message to mark the start of a trial, see Data
        # Viewer User Manual, "Protocol for EyeLink Data to Viewer Integration"
        # Skip this message for the first trial
            if trial_index > 1:
                el_tracker.sendMessage('TRIALID %d' % trial_index)

        # record trial variables to the EDF data file, for details, see Data
        # Viewer User Manual, "Protocol for EyeLink Data to Viewer Integration"
            el_tracker.sendMessage('!V TRIAL_VAR stim_type %s' % stim_type)
            el_tracker.sendMessage('!V TRIAL_VAR stim_name %s' % stim_name)
            el_tracker.sendMessage('!V TRIAL_VAR stim_size %s' % stim_size)
            el_tracker.sendMessage('!V TRIAL_VAR RGB %s' % RGB)

        # if sending many messages in a row, add a 1 msec pause between after
        # every 5 messages or so
            time.sleep(0.001)
            el_tracker.sendMessage('!V TRIAL_VAR corrAns %s' % corrAns)
      Each Frame:
        if int(expInfo['tracking'])==1:

        # This Each Frame tab of the elTrial component handles the marking
        # of experimental events via messages to the EDF, sends additional messages
        # to allow visualization of trial stimuli in Data Viewer, logs trial variable
        # information associated with responses and stimulus timing, and checks whether
        # the eye tracker is still properly recording (and aborts the trial if not)

        # if a key was presssed, calculate the difference between the current time
        # and the time of the key press onset.
        # This offset value will be sent at the beginning of the message
        # and will automatically be subtracted by Data Viewer from the timestamp
        # of the message to position the message at the correct point in time
        # then send a message marking the event
            if not isinstance(resp.rt,list) and sentResponseMessage == 0:
                offsetValue = int(round((globalClock.getTime() - \
                    (resp.tStartRefresh + resp.rt))*1000))
                el_tracker.sendMessage('%i KEY_PRESSED' % offsetValue)

            # after every few messages, include a 1 msec delay to ensure
            # that no messages are missed
                time.sleep(0.001)
                el_tracker.sendMessage('!V TRIAL_VAR accuracy %i' % resp.corr)
                el_tracker.sendMessage('!V TRIAL_VAR keyPressed %s' % resp.keys)

            # log that the response message has been written so that we don't
            # write it again on future frames
                sentResponseMessage = 1

        #Check whether it is the first frame of the fixation presentation
            if fixation.tStartRefresh is not None and sentFixationMessage == 0:

            # send a message marking the fixation onset event
                el_tracker.sendMessage('FIXATION_ONSET')

            # send some Data Viewer drawing commands so that you can see a representation
            # of the fixation cross in Data Viewer's various visualizations
            # For more information on this, see section "Protocol for EyeLink Data to
            # Viewer Integration" section of the Data Viewer User Manual (Help -> Contents)
                el_tracker.sendMessage('!V CLEAR 128 128 128')
                el_tracker.sendMessage('!V DRAWLINE 255 255 255 %i %i %i %i' % \
                    (scn_width/2 - 25,scn_height/2,scn_width/2 + 25,\
                    scn_height/2))
                el_tracker.sendMessage('!V DRAWLINE 255 255 255 %i %i %i %i' % \
                    (scn_width/2,scn_height/2 - 25,scn_width/2,\
                    scn_height/2 + 25))

            # log the fixation onset time (in Display PC time) as a Trial Variable
                fixationTime = fixation.tStartRefresh*1000
                el_tracker.sendMessage('!V TRIAL_VAR fixationTime %i' % fixationTime)

            # set this variable to 1 to ensure we don't write the event message/
            # draw command messages again on future frames
                sentFixationMessage = 1

        # Check whether it is the first frame of the image presentation
            if ball.tStartRefresh is not None and sentBallMessage == 0:

            # send a message marking the image onset event
                el_tracker.sendMessage('IMAGE_ONSET')

            # send some Data Viewer drawing commands so that you can see the trial image
            # in Data Viewer's various visualizations
            # For more information on this, see section "Protocol for EyeLink Data to
            # Viewer Integration" section of the Data Viewer User Manual (Help -> Contents)
                el_tracker.sendMessage('!V CLEAR 128 128 128')
                el_tracker.sendMessage('!V IMGLOAD CENTER ../../%s %i %i' % \
                    (ball,scn_width/2,scn_height/2))

            #log the image onset time (in Display PC time) as a Trial Variable
                imageTime = ball.tStartRefresh*1000
                el_tracker.sendMessage('!V TRIAL_VAR imageTime %i' % imageTime)

            # set this variable to 1 to ensure we don't write the event message/
            # image load messages again on future frames
                sentImageMessage = 1

        # abort the current trial if the tracker is no longer recording
            error = el_tracker.isRecording()
            if error is not pylink.TRIAL_OK:
                el_tracker.sendMessage('tracker_disconnected')
                abort_trial(win)

        # check keyboard events and then check to see if abort key combination (Ctrl-C) pressed
            keyPressList = kb.getKeys(keyList = ['lctrl','rctrl','c'], waitRelease = False, clear = False)
            for keyPress in keyPressList:
                keyPressName = keyPress.name
                if keyPressName not in keyPressNameList:
                    keyPressNameList.append(keyPress.name)
            if ('lctrl' in keyPressNameList or 'rctrl' in keyPressNameList) and 'c' in keyPressNameList:
                el_tracker.sendMessage('terminated_by_user')
                terminate_task(genv,edf_file,session_folder,session_identifier)
        #check for key releases
            keyReleaseList = kb.getKeys(keyList = ['lctrl','rctrl','c'], waitRelease = True, clear = False)
            for keyRelease in keyReleaseList:
                keyReleaseName = keyRelease.name
                if keyReleaseName in keyPressNameList:
                    keyPressNameList.remove(keyReleaseName)
      End Routine:
        if int(expInfo['tracking'])==1:
        # This End Routine tab of the elTrial component clears the screen and logs
        # an additional message to mark the end of the trial

        # clear the screen
            clear_screen(win,genv)
            el_tracker.sendMessage('blank_screen')
        # send a message to clear the Data Viewer screen as well
            el_tracker.sendMessage('!V CLEAR 128 128 128')

        # send a 'TRIAL_RESULT' message to mark the end of trial, see Data
        # Viewer User Manual, "Protocol for EyeLink Data to Viewer Integration"
            el_tracker.sendMessage('TRIAL_RESULT %d' % 0)

        # update the trial counter for the next trial
            trial_index = trial_index + 1
    KeyboardComponent resp
      allowedKeys = "1"
      correctAns = $corrAns
      forceEndRoutine = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = trial_length
      storeCorrect = True
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    PolygonComponent fixation
      fillColor = black
      lineColor = black
      shape = circle
      size = (0.15, 0.15)
      startVal [time (s)] = 0.075
      stopVal [duration (s)] = trial_length
      units = deg
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    PolygonComponent ball
      fillColor [set every repeat] = $RGB
      lineColor [set every repeat] = $RGB
      nVertices = 200
      shape = regular polygon...
      size [set every repeat] = stim_size
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.075
      units = deg
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  Routine instruct
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    TextComponent taskInstructions
      letterHeight = 50
      startVal [time (s)] = 0
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      text:
        Ready?

        Press space to continue.
    KeyboardComponent ready
      allowedKeys = 'space'
      correctAns = thisTrial.corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0
      store = nothing
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  Routine thanks
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    TextComponent endScreen
      letterHeight = 50
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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      text:
        This is the end of the experiment.

        Thanks!
  Routine eyelinkSetup
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    TextComponent elInstructions
      letterHeight = 50
      startVal [time (s)] = 0
      text = If using eyetracking, press any key to enter camera setup
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    KeyboardComponent key_resp
      forceEndRoutine = True
      startVal [time (s)] = 0
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    CodeComponent elConnect
      Code Type = Py
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      Before Experiment:
        # DESCRIPTION:
        # This is a basic example illustrating how to do continuous eye tracker
        # recording through a block of trials (e.g., in an MRI setup), and how to
        # synchronize the presentation of trials with a sync signal from the MRI. With
        # a long recording, we start and stop recording at the beginning and end of a
        # testing session (block/run), rather than at the beginning and end of each
        # experimental trial. We still send the TRIALID and TRIAL_RESULT messages to
        # the tracker, and Data Viewer will still be able to segment the long recording
        # into small segments (trials).

        # The code components in the eyelinkSetup, eyelinkStartRecording, trial, and
        # eyelinkStopRecording routines handle communication with the Host PC/EyeLink
        # system.  All the code components are set to Code Type Py, and each code
        # component may have code in the various tabs (e.g., Before Experiment, Begin
        # Experiment, etc.)

        # Last updated: October 27 2023

        # This Before Experiment tab of the elConnect component imports some
        # modules we need, manages data filenames, allows for dummy mode configuration
        # (for testing), connects to the Host PC, and defines some helper function
        # definitions (which are called later)

        import pylink
        import time
        import platform
        from PIL import Image  # for preparing the Host backdrop image
        from EyeLinkCoreGraphicsPsychoPy import EyeLinkCoreGraphicsPsychoPy
        from string import ascii_letters, digits
        from psychopy import gui

        # Switch to the script folder
        script_path = os.path.dirname(sys.argv[0])
        if len(script_path) != 0:
            os.chdir(script_path)

        # Set this variable to True if you use the built-in retina screen as your
        # primary display device on macOS. If have an external monitor, set this
        # variable True if you choose to "Optimize for Built-in Retina Display"
        # in the Displays preference settings.
        use_retina = False

        # Set this variable to True to run the script in "Dummy Mode"
        dummy_mode = False

        # Set up EDF data file name and local data folder
        #
        # The EDF data filename should not exceed 8 alphanumeric characters
        # use ONLY number 0-9, letters, & _ (underscore) in the filename
        edf_fname = 'TEST'

        # Prompt user to specify an EDF data filename
        # before we open a fullscreen window
        dlg_title = 'Enter EDF File Name'
        dlg_prompt = 'Please enter a file name with 8 or fewer characters\n' + \
                     '[letters, numbers, and underscore].'
        # loop until we get a valid filename
        while True:
            dlg = gui.Dlg(dlg_title)
            dlg.addText(dlg_prompt)
            dlg.addField('File Name:', edf_fname)
            # show dialog and wait for OK or Cancel
            ok_data = dlg.show()
            if dlg.OK:  # if ok_data is not None
                print('EDF data filename: {}'.format(ok_data[0]))
            else:
                print('user cancelled')
                core.quit()
                sys.exit()

            # get the string entered by the experimenter
            tmp_str = dlg.data[0]
            # strip trailing characters, ignore the ".edf" extension
            edf_fname = tmp_str.rstrip().split('.')[0]

            # check if the filename is valid (length <= 8 & no special char)
            allowed_char = ascii_letters + digits + '_'
            if not all([c in allowed_char for c in edf_fname]):
                print('ERROR: Invalid EDF filename')
            elif len(edf_fname) > 8:
                print('ERROR: EDF filename should not exceed 8 characters')
            else:
                break

        # Set up a folder to store the EDF data files and the associated resources
        # e.g., files defining the interest areas used in each trial
        results_folder = 'results'
        if not os.path.exists(results_folder):
            os.makedirs(results_folder)

        # We download EDF data file from the EyeLink Host PC to the local hard
        # drive at the end of each testing session, here we rename the EDF to
        # include session start date/time
        time_str = time.strftime("_%Y_%m_%d_%H_%M", time.localtime())
        session_identifier = edf_fname + time_str

        # create a folder for the current testing session in the "results" folder
        session_folder = os.path.join(results_folder, session_identifier)
        if not os.path.exists(session_folder):
            os.makedirs(session_folder)

        # For macOS users check if they have a retina screen
        if 'Darwin' in platform.system():
                dlg = gui.Dlg("Retina Screen?")
                dlg.addText("Will the task run on a Retina or a non-Retina screen?")
                dlg.addField("Screen Type:", choices=["Not Retina","Retina"])
                # show dialog and wait for OK or Cancel
                ok_data = dlg.show()
                if dlg.OK:
                    if dlg.data[0] == "Retina":
                        use_retina = True
                    else:
                        use_retina = False
                else:
                    print('user cancelled')
                    core.quit()
                    sys.exit()


        # Step 1: Connect to the EyeLink Host PC
        #
        # The Host IP address, by default, is "100.1.1.1".
        # the "el_tracker" objected created here can be accessed through the Pylink
        # Set the Host PC address to "None" (without quotes) to run the script
        # in "Dummy Mode"
        if dummy_mode:
            el_tracker = pylink.EyeLink(None)
        else:
            try:
                el_tracker = pylink.EyeLink("100.1.1.1")
            except RuntimeError as error:
                dlg = gui.Dlg("Dummy Mode?")
                dlg.addText("Couldn't connect to tracker at 100.1.1.1 -- continue in Dummy Mode?")
                # show dialog and wait for OK or Cancel
                ok_data = dlg.show()
                if dlg.OK:  # if ok_data is not None
                    dummy_mode = True
                    el_tracker = pylink.EyeLink(None)
                else:
                    print('user cancelled')
                    core.quit()
                    sys.exit()

        # Define some helper functions for screen drawing
        # and exiting trials/sessions early
        def clear_screen(win,genv):
            """ clear up the PsychoPy window"""
            win.fillColor = genv.getBackgroundColor()
            win.flip()

        def show_msg(win, genv, text, wait_for_keypress=True):
            """ Show task instructions on screen"""
            scn_width, scn_height = win.size
            msg = visual.TextStim(win, text,
                                  color=genv.getForegroundColor(),
                                  wrapWidth=scn_width/2)
            clear_screen(win,genv)
            msg.draw()
            win.flip()

            # wait indefinitely, terminates upon any key press
            if wait_for_keypress:
                kb = keyboard.Keyboard()
                #keys = kb.getKeys(['Enter'], waitRelease=False)
                waitKeys = kb.waitKeys(keyList=None, waitRelease=True, clear=True)
                clear_screen(win,genv)

        def terminate_task(genv,edf_file,session_folder,session_identifier):
            """ Terminate the task gracefully and retrieve the EDF data file
            """
            el_tracker = pylink.getEYELINK()

            if el_tracker.isConnected():
                # Terminate the current trial first if the task terminated prematurely
                error = el_tracker.isRecording()
                if error == pylink.TRIAL_OK:
                    abort_trial()

                # Put tracker in Offline mode
                el_tracker.setOfflineMode()

                # Clear the Host PC screen and wait for 500 ms
                el_tracker.sendCommand('clear_screen 0')
                pylink.msecDelay(500)

                # Close the edf data file on the Host
                el_tracker.closeDataFile()

                # Show a file transfer message on the screen
                msg = 'EDF data is transferring from EyeLink Host PC...'
                show_msg(win, genv, msg, wait_for_keypress=False)

                # Download the EDF data file from the Host PC to a local data folder
                # parameters: source_file_on_the_host, destination_file_on_local_drive
                local_edf = os.path.join(session_folder, session_identifier + '.EDF')
                try:
                    el_tracker.receiveDataFile(edf_file, local_edf)
                except RuntimeError as error:
                    print('ERROR:', error)

                # Close the link to the tracker.
                el_tracker.close()

            # close the PsychoPy window
            win.close()

            # quit PsychoPy
            core.quit()
            sys.exit()

        def abort_trial():
            """Ends recording """
            el_tracker = pylink.getEYELINK()

            # Stop recording
            if el_tracker.isRecording():
                # add 100 ms to catch final trial events
                pylink.pumpDelay(100)
                el_tracker.stopRecording()

            # Send a message to clear the Data Viewer screen
            bgcolor_RGB = (128, 128, 128)
            el_tracker.sendMessage('!V CLEAR %d %d %d' % bgcolor_RGB)

            # send a message to mark trial end
            el_tracker.sendMessage('TRIAL_RESULT %d' % pylink.TRIAL_ERROR)

            return pylink.TRIAL_ERROR
      Begin Experiment:
        # This Begin Experiment tab of the elConnect component opens the EDF, gets graphic
        # information from Psychopy, configures some eye tracker settings, logs the screen
        # resolution for Data Viewer via a DISPLAY_COORDS message, and configures a
        # graphics environment for eye tracker setup/calibration
        if int(expInfo['tracking'])==0:
            print('*************************************************skipping elConnect')
            continueRoutine = False
        elif int(expInfo['tracking'])==1:
            print('*************************************************proceeding with elConnect')

        el_tracker = pylink.getEYELINK()
        # Step 2: Open an EDF data file on the Host PC
        global edf_fname
        edf_file = edf_fname + ".EDF"
        try:
            el_tracker.openDataFile(edf_file)
        except RuntimeError as err:
            print('ERROR:', err)
            # close the link if we have one open
            if el_tracker.isConnected():
                el_tracker.close()
            core.quit()
            sys.exit()

        # Add a header text to the EDF file to identify the current experiment name
        # This is OPTIONAL. If your text starts with "RECORDED BY " it will be
        # available in DataViewer's Inspector window by clicking
        # the EDF session node in the top panel and looking for the "Recorded By:"
        # field in the bottom panel of the Inspector.
        preamble_text = 'RECORDED BY %s' % os.path.basename(__file__)
        el_tracker.sendCommand("add_file_preamble_text '%s'" % preamble_text)

        # Step 3: Configure the tracker
        #
        # Put the tracker in offline mode before we change tracking parameters
        el_tracker.setOfflineMode()

        # Get the software version:  1-EyeLink I, 2-EyeLink II, 3/4-EyeLink 1000,
        # 5-EyeLink 1000 Plus, 6-Portable DUO
        eyelink_ver = 0  # set version to 0, in case running in Dummy mode
        if not dummy_mode:
            vstr = el_tracker.getTrackerVersionString()
            eyelink_ver = int(vstr.split()[-1].split('.')[0])
            # print out some version info in the shell
            print('Running experiment on %s, version %d' % (vstr, eyelink_ver))

        # File and Link data control
        # what eye events to save in the EDF file, include everything by default
        file_event_flags = 'LEFT,RIGHT,FIXATION,SACCADE,BLINK,MESSAGE,BUTTON,INPUT'
        # what eye events to make available over the link, include everything by default
        link_event_flags = 'LEFT,RIGHT,FIXATION,SACCADE,BLINK,BUTTON,FIXUPDATE,INPUT'
        # what sample data to save in the EDF data file and to make available
        # over the link, include the 'HTARGET' flag to save head target sticker
        # data for supported eye trackers
        if eyelink_ver > 3:
            file_sample_flags = 'LEFT,RIGHT,GAZE,HREF,RAW,AREA,HTARGET,GAZERES,BUTTON,STATUS,INPUT'
            link_sample_flags = 'LEFT,RIGHT,GAZE,GAZERES,AREA,HTARGET,STATUS,INPUT'
        else:
            file_sample_flags = 'LEFT,RIGHT,GAZE,HREF,PUPIL,AREA,GAZERES,BUTTON,STATUS,INPUT'
            link_sample_flags = 'LEFT,RIGHT,GAZE,GAZERES,AREA,STATUS,INPUT'
        el_tracker.sendCommand("file_event_filter = %s" % file_event_flags)
        el_tracker.sendCommand("file_sample_data = %s" % file_sample_flags)
        el_tracker.sendCommand("link_event_filter = %s" % link_event_flags)
        el_tracker.sendCommand("link_sample_data = %s" % link_sample_flags)

        # Optional tracking parameters
        # Sample rate, 250, 500, 1000, or 2000, check your tracker specification
        # if eyelink_ver > 2:
        #     el_tracker.sendCommand("sample_rate 1000")
        # Choose a calibration type, H3, HV3, HV5, HV13 (HV = horizontal/vertical),
        el_tracker.sendCommand("calibration_type = HV9")
        # Set a gamepad button to accept calibration/drift check target
        # You need a supported gamepad/button box that is connected to the Host PC
        el_tracker.sendCommand("button_function 5 'accept_target_fixation'")

        # get the native screen resolution used by PsychoPy
        scn_width, scn_height = win.size
        # resolution fix for Mac retina displays
        if 'Darwin' in platform.system():
            if use_retina:
                scn_width = int(scn_width/2.0)
                scn_height = int(scn_height/2.0)

        # Pass the display pixel coordinates (left, top, right, bottom) to the tracker
        # see the EyeLink Installation Guide, "Customizing Screen Settings"
        el_coords = "screen_pixel_coords = 0 0 %d %d" % (scn_width - 1, scn_height - 1)
        el_tracker.sendCommand(el_coords)

        # Write a DISPLAY_COORDS message to the EDF file
        # Data Viewer needs this piece of info for proper visualization, see Data
        # Viewer User Manual, "Protocol for EyeLink Data to Viewer Integration"
        dv_coords = "DISPLAY_COORDS  0 0 %d %d" % (scn_width - 1, scn_height - 1)
        el_tracker.sendMessage(dv_coords)

        # Configure a graphics environment (genv) for tracker calibration
        genv = EyeLinkCoreGraphicsPsychoPy(el_tracker, win)
        print(genv)  # print out the version number of the CoreGraphics library
      End Experiment:
        # This End Experiment tab of the elConnect component calls the
        # terminate_task helper function to get the EDF file and close the connection
        # to the Host PC

        # Disconnect, download the EDF file, then terminate the task
        if expInfo['tracking']==1:
            terminate_task(genv,edf_file,session_folder,session_identifier)
      End Routine:
        if int(expInfo['tracking'])==1:

        # This End Routine tab of the elConnect component configures some
        # graphics options for calibration, and then performs a camera setup
        # so that you can set up the eye tracker and calibrate/validate the participant

        # Set background and foreground colors for the calibration target
        # in PsychoPy, (-1, -1, -1)=black, (1, 1, 1)=white, (0, 0, 0)=mid-gray
            foreground_color = (-1, -1, -1)
            background_color = tuple(win.color)
            genv.setCalibrationColors(foreground_color, background_color)

            print('Got here: A')

        # Set up the calibration target
        #
        # The target could be a "circle" (default), a "picture", a "movie" clip,
        # or a rotating "spiral". To configure the type of calibration target, set
        # genv.setTargetType to "circle", "picture", "movie", or "spiral", e.g.,
        # genv.setTargetType('picture')
        #
        # Use genv.setMovieTarget() to set a "movie" target
        # genv.setMovieTarget(os.path.join('videos', 'calibVid.mov'))

        # Use a picture as the calibration target
            genv.setTargetType('picture')
            genv.setPictureTarget(os.path.join('images', 'fixTarget.bmp'))

            print('Got here: B')

        # Configure the size of the calibration target (in pixels)
        # this option applies only to "circle" and "spiral" targets
        # genv.setTargetSize(24)

        # Beeps to play during calibration, validation and drift correction
        # parameters: target, good, error
        #     target -- sound to play when target moves
        #     good -- sound to play on successful operation
        #     error -- sound to play on failure or interruption
        # Each parameter could be ''--default sound, 'off'--no sound, or a wav file
            genv.setCalibrationSounds('', '', '')

        # resolution fix for macOS retina display issues
            if use_retina:
                genv.fixMacRetinaDisplay()

        #clear the screen before we begin Camera Setup mode
            clear_screen(win,genv)

            print('Got here: C')

        # Request Pylink to use the PsychoPy window we opened above for calibration
            pylink.openGraphicsEx(genv)

            print('Got here: D')

        # Peform a Camera Setup (eye tracker calibration)
        # skip this step if running the script in Dummy Mode
            if not dummy_mode:
                try:
                    el_tracker.doTrackerSetup()
                except RuntimeError as err:
                    print('ERROR:', err)
                    el_tracker.exitCalibration()
            clear_screen(win,genv)

            print('Got here: E')
  Routine eyelinkStartRecording
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    CodeComponent elStartRecord
      Code Type = Py
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      Begin Experiment:
        # This Begin Experiment tab of the elStartRecord component initializes some
        # variables that are used to keep track of the current trial
        # numbers

        trial_index = 1
      Begin Routine:
        if int(expInfo['tracking'])==1:
            print('*************************************************proceeding with elStartRecord')

        # This Begin Routine tab of the elStartRecord component updates some
        # variables that are used to keep track of the current trial and block
        # numbers, draws some feedback graphics (a simple shape) on the
        # Host PC, sends a trial start messages to the EDF, performs a
        # drift check/drift correct, and starts eye tracker recording

        # get a reference to the currently active EyeLink connection
            el_tracker = pylink.getEYELINK()

        # put the tracker in the offline mode first
            el_tracker.setOfflineMode()

        # clear the host screen before we draw the backdrop
            el_tracker.sendCommand('clear_screen 0')

        # OPTIONAL: draw landmarks and texts on the Host screen
        # In addition to backdrop image, You may draw simples on the Host PC to use
        # as landmarks. For illustration purpose, here we draw some texts and a box
        # For a list of supported draw commands, see the "COMMANDS.INI" file on the
        # Host PC (under /elcl/exe)
            left = int(scn_width/2.0) - 60
            top = int(scn_height/2.0) - 60
            right = int(scn_width/2.0) + 60
            bottom = int(scn_height/2.0) + 60
            draw_cmd = 'draw_filled_box %d %d %d %d 1' % (left, top, right, bottom)
            el_tracker.sendCommand(draw_cmd)

        # send a "TRIALID" message to mark the start of a trial, see Data
        # Viewer User Manual, "Protocol for EyeLink Data to Viewer Integration"
            el_tracker.sendMessage('TRIALID %d' % trial_index)

        # drift check
        # we recommend drift-check at the beginning of each trial
        # the doDriftCorrect() function requires target position in integers
        # the last two arguments:
        # draw_target (1-default, 0-draw the target then call doDriftCorrect)
        # allow_setup (1-press ESCAPE to recalibrate, 0-not allowed)

        # Skip drift-check if running the script in Dummy Mode
            while not dummy_mode:
            # terminate the task if no longer connected to the tracker or
            # user pressed Ctrl-C to terminate the task
                if (not el_tracker.isConnected()) or el_tracker.breakPressed():
                    terminate_task(genv,edf_file,session_folder,session_identifier)
            # drift-check and re-do camera setup if ESCAPE is pressed
                try:
                    error = el_tracker.doDriftCorrect(int(scn_width/2.0),
                                                  int(scn_height/2.0), 1, 1)
                # break following a success drift-check
                    if error is not pylink.ESC_KEY:
                        break
                except:
                    pass

        # put tracker in idle/offline mode before recording
            el_tracker.setOfflineMode()

        # Start recording
        # arguments: sample_to_file, events_to_file, sample_over_link,
        # event_over_link (1-yes, 0-no)
            try:
                el_tracker.startRecording(1, 1, 1, 1)
            except RuntimeError as error:
                print("ERROR:", error)
                abort_trial()

        # Allocate some time for the tracker to cache some samples before allowing
        # trial stimulus presentation to proceed
            pylink.pumpDelay(100)
  Routine eyelinkStopRecording
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    CodeComponent elStopRecord
      Code Type = Py
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      End Routine:
        if expInfo['tracking']==1:
        # This End Routine tab of the elStopRecord component stops eye tracker recording

        # stop recording; add 100 msec to catch final events before stopping
            pylink.pumpDelay(100)
            el_tracker.stopRecording()
  Routine waitForScannerPulse
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    TextComponent waitTriggerText
      letterHeight = 50
      startVal [time (s)] = 0
      text = Waiting for scanner...
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    KeyboardComponent keyTrigger
      allowedKeys = '5'
      forceEndRoutine = True
      startVal [time (s)] = 0.25
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    CodeComponent logTriggerTime
      Code Type = Py
      End Routine:
        if expInfo['tracking']==1:

        # This End Routine tab of the logTriggerTime component sends an event
        # marking message for the trigger pulse signal and, importantly, logs the pulse
        # time so that we can later write make it a trial variable (via TRIAL_VAR
        # messages to the EDF on each trial)

        # If a key was presssed, calculate the difference between the current time
        # and the time of the key press onset. This offset value will be sent at the
        # beginning of the message and will automatically be subtracted by Data Viewer
        # from the timestamp of the message to position the message at the correct point
        # in time. Then send a message marking the event
            if not isinstance(keyTrigger.rt,list):

                offsetValue = int(round((globalClock.getTime() - \
                    (keyTrigger.tStartRefresh + keyTrigger.rt))*1000))
                scanPulseTime = int(round((keyTrigger.tStartRefresh + keyTrigger.rt)*1000))
                el_tracker.sendMessage('%i SCAN_PULSE_RECEIVED' % offsetValue)
  Routine welcome
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    TextComponent welcometext
      letterHeight = 50
      startVal [time (s)] = 0.0
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      text:
        Welcome to
        the Oddball Task!
        Remember, your job is to
        press the button under
        your first finger when
        you see the LARGE circle.
    KeyboardComponent move_on_from_welcome
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine welcome
  Routine eyelinkSetup
  Routine instruct
  Routine eyelinkStartRecording
  Routine waitForScannerPulse
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = conditions.csv
    endPoints = [1, 2]
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('onset_time', 0.0), ('stim_type', 1), ('stim_name', 'targ'), ('trial_length', 0.5), ('stim_size', 3.6), ('RGB', [0.7298, 0.5623, 0.6473]), ('corrAns', 1.0)]),
      OrderedDict([('onset_time', 0.5), ('stim_type', 3), ('stim_name', 'nontarg'), ('trial_length', 0.5), ('stim_size', 1.6), ('RGB', [0.7298, 0.5623, 0.6473]), ('corrAns', None)]),
      OrderedDict([('onset_time', 1.0), ('stim_type', 2), ('stim_name', 'bright'), ('trial_length', 4.0), ('stim_size', 1.6), ('RGB', [0.78, 0.61, 0.7]), ('corrAns', None)]),
      OrderedDict([('onset_time', 5.0), ('stim_type', 3), ('stim_name', 'nontarg'), ('trial_length', 0.5), ('stim_size', 1.6), ('RGB', [0.7298, 0.5623, 0.6473]), ('corrAns', None)]),
      OrderedDict([('onset_time', 5.5), ('stim_type', 1), ('stim_name', 'targ'), ('trial_length', 1.0), ('stim_size', 3.6), ('RGB', [0.7298, 0.5623, 0.6473]), ('corrAns', 1.0)]),
      OrderedDict([('onset_time', 6.5), ('stim_type', 3), ('stim_name', 'nontarg'), ('trial_length', 0.5), ('stim_size', 1.6), ('RGB', [0.7298, 0.5623, 0.6473]), ('corrAns', None)]),
      OrderedDict([('onset_time', 7.0), ('stim_type', 3), ('stim_name', 'nontarg'), ('trial_length', 0.5), ('stim_size', 1.6), ('RGB', [0.7298, 0.5623, 0.6473]), ('corrAns', None)]),
      OrderedDict([('onset_time', 7.5), ('stim_type', 1), ('stim_name', 'targ'), ('trial_length', 2.0), ('stim_size', 3.6), ('RGB', [0.7298, 0.5623, 0.6473]), ('corrAns', 1.0)])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
    Routine trial
  LoopTerminator trials
  Routine eyelinkStopRecording
  Routine thanks
